def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp input_flow_internalcarotid_L_type as
    var t: second {pub: in};
    var v: m3_per_s {pub: out};
    v = 3.1e-6{dimensionless};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp input_flow_internalcarotid_R_type as
    var t: second {pub: in};
    var v: m3_per_s {pub: out};
    v = 3.1e-6{dimensionless};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp input_flow_basilar_type as
    var t: second {pub: in};
    var v1: m3_per_s {pub: out};
    var v2: m3_per_s {pub: out};
    v1 = 3.1e-6{dimensionless};
    v2 = 3.1e-6{dimensionless};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp p_observer_type as
    var t: second {pub: in};
    var u: J_per_m3 {priv: in, pub: out};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp f_observer_type as
    var t: second {pub: in};
    var v: m3_per_s {priv: in, pub: out};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp controller_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var error_flow_percent: dimensionless {pub: out};
    var u_a: J_per_m3 {pub: in};
    var v_a: m3_per_s {pub: in};
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var check: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var learning_rate: dimensionless {init: 1e6};
    var K_a: dimensionless {init: 0.001};
    var critic: dimensionless {pub: out};
    var r_a: dimensionless {pub: out};
    // Conservation Laws
    r_a = BFF_ASL-v_a/meanflow_4dflow;
    error = pressure_d-u_a;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-4{dimensionless});
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;

  def comp controller2_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var error_flow_percent: Js_per_m6 {pub: out};
    var u_a: J_per_m3 {pub: in};
    var v_a: m3_per_s {pub: in};
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var check: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var learning_rate: dimensionless {init: 1e8};
    var K_a: dimensionless {init: 0.01};
    var critic: dimensionless {pub: out};
    var r_a: dimensionless {pub: out};
    // Conservation Laws
    r_a = BFF_ASL-v_a/meanflow_4dflow;
    error = pressure_d-u_a;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-6{dimensionless});
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v-v_out)/C;
    u = u_C+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(u_C, t) = (v-v_d)/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_out)/C;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    ode(u_C, t) = (v-v_d)/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    du_C_dt = (v-v_out_1-v_out_2)/C;
    ode(u_C, t) = du_C_dt;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out_1-v_out_2)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {init: 0.0, pub: out};
    var v_out: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp flow_sum_2_type as
    var t: second {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_total: m3_per_s {pub: out};
    v_total = v_1+v_2;
  enddef;
enddef;
