def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// //////////////////modules for different ion channels ///////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp myocyte_membrane_voltage as
    var Vm_init: volt {pub: in};
    var Vm: volt {init: Vm_init, pub: out};
    var t: second {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_f: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_stim: A_per_F {pub: in};
    ode(Vm, t) = -(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_NaCa+i_PCa+i_f+i_b_Na+i_b_Ca-i_stim);
  enddef;

  def comp sympathetic_neuron_membrane_voltage as
    var Vm_init: milliV {pub: in};
    var Vm: milliV {init: Vm_init, pub: out};
    var Vm_volt: volt;
    var t: second {pub: in};
    var i_Ca: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_A: nanoA {pub: in};
    var i_KV: nanoA {pub: in};
    var i_KCa: nanoA {pub: in};
    var i_stim: nanoA {pub: in};
    var C_m: picoF {pub: in};
    ode(Vm, t) = -(i_Na+i_Ca+i_A+i_KV+i_KCa-i_stim)/C_m*1e6{milliV_per_kiloV};
    Vm_volt = Vm/1000{millV_per_V};
  enddef;

  def comp Ca_dynamics_Paci_2013 as
    var Cai_init: millimolar {pub: in};
    var Ca_SR_init: millimolar {pub: in};
    var Cai: millimolar {init: Cai_init, pub: out};
    var Ca_SR: millimolar {init: Ca_SR_init};
    var Vc: microm3 {pub: in};
    var V_SR: microm3 {pub: in};
    var t: second {pub: in};
    var F: C_per_M {pub: in};
    var Vm: volt {pub: in};
    var Cm: farad {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var a_rel: millimolar_per_s {pub: in};
    var b_rel: millimolar {pub: in};
    var c_rel: millimolar_per_s {pub: in};
    var g_init: dimensionless {pub: in};
    var g: dimensionless {init: g_init};
    var tau_g: second {pub: in};
    var g_inf: dimensionless;
    var Kup: millimolar {pub: in};
    var Buf_C: millimolar {pub: in};
    var Buf_SR: millimolar {pub: in};
    var Kbuf_C: millimolar {pub: in};
    var Kbuf_SR: millimolar {pub: in};
    var Cai_bufc: dimensionless;
    var Ca_SR_bufSR: dimensionless;
    var d: dimensionless {pub: in};
    var VmaxUp: millimolar_per_s {pub: in};
    var const2: dimensionless;
    var V_leak: per_s {pub: in};
    var i_rel: millimolar_per_s;
    var i_up: millimolar_per_s;
    var i_leak: millimolar_per_s;
    i_rel = (c_rel+a_rel*sqr(Ca_SR)/(sqr(b_rel)+sqr(Ca_SR)))*d*g*0.0411{dimensionless};
    i_up = VmaxUp/(1{dimensionless}+sqr(Kup)/sqr(Cai));
    i_leak = (Ca_SR-Cai)*V_leak;
    g_inf = sel
      case Cai <= 0.00035{millimolar}:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 16{dimensionless}));
    endsel;
    const2 = sel
      case (g_inf > g) and (Vm > -0.06{volt}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(g, t) = const2*(g_inf-g)/tau_g;
    Cai_bufc = 1{dimensionless}/(1{dimensionless}+Buf_C*Kbuf_C/sqr(Cai+Kbuf_C));
    Ca_SR_bufSR = 1{dimensionless}/(1{dimensionless}+Buf_SR*Kbuf_SR/sqr(Ca_SR+Kbuf_SR));
    ode(Cai, t) = Cai_bufc*(i_leak-i_up+i_rel-(i_CaL+i_b_Ca+i_PCa-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*Vc*F*1e-18{m3_per_microm3}));
    ode(Ca_SR, t) = Ca_SR_bufSR*Vc/V_SR*(i_up-(i_rel+i_leak));
  enddef;

  def comp electric_potentials_Paci_2013 as
    var t: second {pub: in};
    var E_Na: volt {pub: out};
    var E_K: volt {pub: out};
    var E_Ks: volt {pub: out};
    var E_Ca: volt {pub: out};
    var R: J_per_MK {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_M {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var PkNa: dimensionless {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Ks = R*T/F*ln((Ko+PkNa*Nao)/(Ki+PkNa*Nai));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Cao/Cai);
  enddef;

  def comp Na_dynamics_Paci_2013 as
    var Nai_init: millimolar {pub: in};
    var Nai: millimolar {init: Nai_init, pub: out};
    var Cm: farad {pub: in};
    var Vc: microm3 {pub: in};
    var t: second {pub: in};
    var F: C_per_M {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    ode(Nai, t) = -Cm*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(F*Vc*1e-18{m3_per_microm3});
  enddef;

  def comp NE_release_Tao_2011 as
    var t: second {pub: in};
    var V_Ca: J_per_M {init: 0.0, pub: out};
    var V_1Ca: J_per_M {init: 0.0, pub: out};
    var V_2Ca: J_per_M {init: 0.0, pub: out};
    var V_3Ca: J_per_M {init: 0.0, pub: out};
    var V_4Ca: J_per_M {init: 0.0, pub: out};
    var V_5Ca: J_per_M {init: 0.0, pub: out};
    var NE: dimensionless {init: 0.0, pub: out};
    var K_off: per_millis {pub: in};
    var K_on: m3_per_milliM_s {pub: in};
    var K_Ca: per_s {pub: in};
    var b: dimensionless {pub: in};
    var E: per_millis {pub: out};
    var Cai: milliM_per_m3 {init: 0.0, pub: out};
    var gamma: m3_per_M_millis {pub: in};
    var i_Ca: nanoA {pub: in};
    var C_m: picoF {pub: in};
    var F: C_per_M {pub: in};
    var V_Z: litre {pub: in};
    var a: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var V_cleft: litre {pub: in};
    var P_up: per_millis {pub: in};
    // Intracellular concentration, input by Ca current, output with
    // a regulating time constant K_Ca.
    ode(Cai, t) = -i_Ca/(2{dimensionless}*F*V_Z*1e-6{dimensionless})-Cai*K_Ca;
    // Kinetics equations.
    ode(V_Ca, t) = K_off*V_1Ca-5{dimensionless}*K_on*Cai*V_Ca;
    ode(V_1Ca, t) = 5{dimensionless}*K_on*Cai*V_Ca+2{dimensionless}*K_off*V_2Ca*b-(K_off*b+4{dimensionless}*K_on*Cai)*V_1Ca;
    ode(V_2Ca, t) = 4{dimensionless}*K_on*Cai*V_1Ca+3{dimensionless}*K_off*V_3Ca*sqr(b)-(2{dimensionless}*K_off*b+3{dimensionless}*K_on*Cai)*V_2Ca;
    ode(V_3Ca, t) = 3{dimensionless}*K_on*Cai*V_2Ca+4{dimensionless}*K_off*V_4Ca*pow(b, 3{dimensionless})-(3{dimensionless}*K_off*sqr(b)+2{dimensionless}*K_on*Cai)*V_3Ca;
    ode(V_4Ca, t) = 2{dimensionless}*K_on*Cai*V_3Ca+5{dimensionless}*K_off*V_5Ca*pow(b, 4{dimensionless})-(4{dimensionless}*K_off*pow(b, 3{dimensionless})+1{dimensionless}*K_on*Cai)*V_4Ca;
    // I think the above V_2Ca should be V_5Ca... error in supp material of Tao 2011?
    ode(V_5Ca, t) = K_on*Cai*V_4Ca-5{dimensionless}*K_off*pow(b, 4{dimensionless})*V_5Ca;
    // Rate of diffusion for the released vesicles.
    E = gamma*V_5Ca;
    // NE in the cleft
    ode(NE, t) = E*n*a/V_cleft-NE*P_up;
  enddef;

  def comp SN_pre_synaptic as
    var t: second {pub: in};
    // global constants
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var T: kelvin {pub: in};
    var a_cleft: dimensionless {pub: in};
    var n_cleft: dimensionless {pub: in};
    var V_cleft: litre {pub: in};
    var N_avo: per_mol {pub: in};
    // constants
    var gna: microS {pub: in};
    var b: picoF {pub: in};
    // neuron capacitance
    var Cm1: picoF {pub: in};
    // myocyte capacitance (currently not used, TODO remove)
    var Cm: picoF {pub: in};
    var eca1: milliV {pub: in};
    var ek1: milliV {pub: in};
    var ena1: milliV {pub: in};
    var gamma: per_s {pub: in};
    var pCa: m3_per_s {pub: in};
    var gkv: microS {pub: in};
    var gA: microS {pub: in};
    var gkcf: microS {pub: in};
    var gkcs: microS {pub: in};
    var kon: per_milliM_s {pub: in};
    var koff: per_s {pub: in};
    var Cao: millimolar {pub: in};
    // active zone
    var Vz: litre {pub: in};
    // state variables
    var V_init: milliV {pub: in};
    var V: milliV {init: V_init, pub: out};
    var m_init: dimensionless {pub: in};
    var m: dimensionless {init: m_init, pub: out};
    var h_init: dimensionless {pub: in};
    var h: dimensionless {init: h_init, pub: out};
    var c_init: dimensionless {pub: in};
    var c: dimensionless {init: c_init, pub: out};
    var hc_init: dimensionless {pub: in};
    var hc: dimensionless {init: hc_init, pub: out};
    var n1_init: dimensionless {pub: in};
    var n1: dimensionless {init: n1_init, pub: out};
    var a_init: dimensionless {pub: in};
    var a: dimensionless {init: a_init, pub: out};
    var ah_init: dimensionless {pub: in};
    var ah: dimensionless {init: ah_init, pub: out};
    var kcf_init: dimensionless {pub: in};
    var kcf: dimensionless {init: kcf_init, pub: out};
    var kcs_init: dimensionless {pub: in};
    var kcs: dimensionless {init: kcs_init, pub: out};
    var Caz_init: millimolar {pub: in};
    var Caz: millimolar {init: Caz_init, pub: out};
    var B0_init: dimensionless {pub: in};
    var B0: dimensionless {init: B0_init, pub: out};
    var B1_init: dimensionless {pub: in};
    var B1: dimensionless {init: B1_init, pub: out};
    var B2_init: dimensionless {pub: in};
    var B2: dimensionless {init: B2_init, pub: out};
    var B3_init: dimensionless {pub: in};
    var B3: dimensionless {init: B3_init, pub: out};
    var B4_init: dimensionless {pub: in};
    var B4: dimensionless {init: B4_init, pub: out};
    var B5_init: dimensionless {pub: in};
    var B5: dimensionless {init: B5_init, pub: out};
    var NE_init: dimensionless {pub: in};
    var NE: dimensionless {init: NE_init, pub: out};
    // algebraic variables
    var iNa_N: nanoA;
    var iCa_N: nanoA;
    var ikv: nanoA;
    var iA: nanoA;
    var ikca: nanoA;
    var I_app: nanoA {pub: in};
    var m_inf: dimensionless;
    var h_inf: dimensionless;
    var tau_m: millis;
    var tau_h: millis;
    var c_inf: dimensionless;
    var hc_inf: dimensionless;
    var tau_c: millis;
    var tau_hc: millis;
    var n1_inf: dimensionless;
    var tau_n1: millis;
    var a_inf: dimensionless;
    var ah_inf: dimensionless;
    var tau_a: millis;
    var tau_ah: millis;
    var kcf_inf: dimensionless;
    var kcs_inf: dimensionless;
    var tau_kcf: millis;
    var tau_kcs: millis;
    var E: dimensionless;
    var epsilon_tau: second {init: 1e-4};
    // voltage
    ode(V, t) = -1e6{mV_per_kV}*(iNa_N+iCa_N+ikv+iA+ikca+I_app)/Cm1;
    // I_Na_N
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+36{milliV})/7.2{milliV}));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+53.2{miliV})/6.5{milliV}));
    tau_m = 0.06{millis}+1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_h = -0.0046{millis_per_milliV}*V+0.26{millis}+50.85{millis}/(1{dimensionless}+exp((-59.46{milliV}-V)/7.91{milliV})+1{dimensionless}+exp((40.94{milliV}+V)/1.556{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m*0.001{s_per_millis})+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h*0.001{s_per_millis})+epsilon_tau);
    iNa_N = gna*(V-ena1)*pow(m, 3{dimensionless})*h;
    // I_Ca_N
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+8.1{milliV})/9.85{milliV}));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+19.91{milli_V})/4.5{milliV}));
    tau_c = 0.1{millis}+1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    tau_hc = 17{millis}+1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c*0.001{s_per_millis})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc*0.001{s_per_millis})+epsilon_tau);
    // TODO check units for pCa, it says millis? TODOTODO next thing to do.
    iCa_N = 4e6{nanoA_per_milliA}*sqr(F)*V*pCa/(R*T)*(Caz*exp(2e-3{V_per_milliV}*V*F/(R*T))-Cao)/(exp(2e-3{V_per_milliV}*V*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    // I_kv
    n1_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+6.084{milliV})/8.007{milliV}));
    tau_n1 = 2.31{millis}+1{dimensionless}/(0.385{per_millis}*exp(0.101{per_milliV}*V)+8.134e-4{per_millis}*exp(-0.1177{per_milliV}*V));
    ode(n1, t) = (n1_inf-n1)/(abs(tau_n1*0.001{s_per_millis})+epsilon_tau);
    ikv = gkv*(V-ek1)*n1;
    // I_A
    a_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+49.4{milliV})/9.9{milliV}));
    ah_inf = 1{dimensionless}/(1{dimensionless}+exp((V+80.43{milliV})/7.07{milliV}));
    tau_a = 0.2{millis}+1{dimensionless}/(3.7{per_millis}*exp(0.03856{per_milliV}*V)+0.05362{per_millis}*exp(-0.04448{per_milliV}*V));
    tau_ah = -0.038{millis_per_milliV}*V+6{millis}+87{millis}/(1{dimensionless}+exp((-80{milliV}-V)/5{milliV})+1{dimensionless}+exp((55{milliV}+V)/1.4{milliV}));
    ode(a, t) = (a_inf-a)/(abs(tau_a*0.001{s_per_millis})+epsilon_tau);
    ode(ah, t) = (ah_inf-ah)/(abs(tau_ah*0.001{s_per_millis})+epsilon_tau);
    // IMPORTANT
    // in Tao's matlab code, this is ek, the nernst potential, not ek1, which could be an error from them potentially, check this
    // why use the constant or the nernst potential?? ...
    // In Belluzi and Sacchi this is calculated differently again from end of cycle concentration. Improve this
    iA = gA*(V-ek1)*a*ah;
    // I_kca
    kcf_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+11.54{milliV})/4.99{milliV}));
    kcs_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+15.18{milliV})/4{milliV}));
    tau_kcf = 1.4{millis}+1{dimensionless}/(1292{per_millis}*exp(0.274{per_milliV}*V)+3.59e-3{per_millis}*exp(-0.126{per_milliV}*V));
    tau_kcs = 1{dimensionless}/(0.25{per_millis}*exp(0.7{per_milliV}*V)+7.3e-4{per_millis}*exp(-0.144{per_milliV}*V))+(-1.9{millis_per_milliV}*V)+92{millis};
    ode(kcf, t) = (kcf_inf-kcf)/(abs(tau_kcf*0.001{s_per_millis})+epsilon_tau);
    ode(kcs, t) = (kcs_inf-kcs)/(abs(tau_kcs*0.001{s_per_millis})+epsilon_tau);
    // this ignores a delay that is present in Beluzzi1991
    ikca = gkcf*(V-ek1)*kcf+gkcs*(V-ek1)*kcs;
    // todo there are no calcium pumps, potentially needs improving.
    // TODO I have changed the 2ndterm here to make calcium transients last longer.
    ode(Caz, t) = -1{dimensionless}*iCa_N*Cm1/(2{dimensionless}*F*Vz*1e18{dimensionless})-(Caz-Caz_init)*10{per_second};
    // Calcium dependent vesicle binding TODO understand these equations better.
    ode(B0, t) = koff*B1-5{dimensionless}*kon*Caz*B0;
    ode(B1, t) = 5{dimensionless}*kon*Caz*B0+2{dimensionless}*koff*B2*pow(b, 1{dimensionless})-(koff*pow(b, 0{dimensionless})+4{dimensionless}*kon*Caz)*B1;
    ode(B2, t) = 4{dimensionless}*kon*Caz*B1+3{dimensionless}*koff*B3*sqr(b)-(2{dimensionless}*koff*pow(b, 1{dimensionless})+3{dimensionless}*kon*Caz)*B2;
    ode(B3, t) = 3{dimensionless}*kon*Caz*B2+4{dimensionless}*koff*B4*pow(b, 3{dimensionless})-(3{dimensionless}*koff*sqr(b)+2{dimensionless}*kon*Caz)*B3;
    ode(B4, t) = 2{dimensionless}*kon*Caz*B3+5{dimensionless}*koff*B5*pow(b, 4{dimensionless})-(4{dimensionless}*koff*pow(b, 3{dimensionless})+kon*Caz)*B4;
    // TODO check the power to 4 here? should it be 5? it breaks the pattern.
    ode(B5, t) = kon*Caz*B4-5{dimensionless}*koff*pow(b, 4{dimensionless})*B5;
    // check units of gamma
    E = gamma*B5;
    // TODO where does the 500 come from
    // This is one of the equations I need to improve, to have accurate reuptake of NE
    // This needs unit change from millis.
    // ode(NE, t) = 1e3{dimensionless}*n_cleft*E*a_cleft/N_avo/V_cleft-NE*0.001{per_s};
    // TODO improve this equation
    ode(NE, t) = 1e-1{dimensionless}*Caz-10{dimensionless}*(NE-NE_init);
    // - NE*P_up?
  enddef;
enddef;
